
// For all sections from this SectionList, and corresponding SectionRef to the List
// $o1 - The SectionList
// $o2 - The List
proc secListToListOfSecRef() { localobj secList, list_ref
    secList = $o1
    list_ref = $o2
    forsec secList {
        list_ref.append(new SectionRef())
    }
}

// For the current section and all its children subtree, add SectionRef-s to the List
// $o1 - The List
proc addThisAndAllChildSecRefsToTheList() { localobj list_ref, secList
    list_ref = $o1
    secList = new SectionList()
    secList.subtree()
    secListToListOfSecRef(secList, list_ref)
}

// For all duplicate sections, remove SectionRef-s from the List, so only one copy remains
// $o1 - The List
proc removeAllDupSecRefsFromTheList() { localobj list_ref, secList, item
    list_ref = $o1
    secList = new SectionList()
    for eachItemInList(item, list_ref) {
        item.sec secList.append()
    }
    secList.unique()
    list_ref.remove_all()
    secListToListOfSecRef(secList, list_ref)
}

// Check if the currently accessed section belongs to a dendrite
// Input: usedNamesForDendrites (taken from the top level)
// Returns: 0/1 flag
func checkIfCurrentSecIsDendrite() { local idx
    strdef secName
    
    getCurrentSecName(secName)
    
    // !! maybe implement something like "iterator findItemInList"
    //    (to avoid "return" in iterator_statement which causes segmentation violation error)
    
    // !! improve performace here using Set in Python
    for idx = 0, usedNamesForDendrites.count() - 1 {
        if (stringsEqual(secName, usedNamesForDendrites.o(idx).s)) {
            return 1
        }
    }
    
    return 0
}
