
// Print the message, print the call stack, raise the error
// $s1 - The message
proc printMsgAndRaiseError() {
    strdef msg
    sprint(msg, "\n\n    %s\n", $s1)
    execerror(msg)
}

// Print "Not implemented" message, print the call stack, raise the error
proc printNotImplementedMsgAndRaiseError() {
    strdef msg1, msg2
    sprint(msg1, "\n\n    %s", $s1)
    msg2 = "\n    Not implemented.\n    If required, please ask the developer to prioritize.\n"
    execerror(msg1, msg2)
}

// Report the bug, print the call stack, raise the error
proc codeContractViolation() {
    execerror("\n\n    Bug in Cell program: Code contract violation", "\n    Please report this problem to the developer along with the call stack shown below\n")
}
