
objref msmBaseWidget, mechManagerMainWidget, synManagerMainWidget, varsEditorSubWidget
objref mth, mmmowb, mcu, synGroup, spineNeckDiamCache, inhomAndStochLibrary

if (isAstrocyteOrNeuron) {
    objref smAllSyns, enumSynCompIdxs, seh
}

proc loadIfNotDeclared() {
    strdef templName, hocFileRelPathName
    templName = $s1
    hocFileRelPathName = $s2
    if (!name_declared(templName)) {
        load_file(hocFileRelPathName)
    } else if (isBaseOrNanoStart) {
        codeContractViolation()
    }
}

{ load_file("MechTypeHelper.hoc") }

{ load_file("InhomAndStochLibrary/InhomAndStochTarget.hoc") }
{ load_file("InhomAndStochLibrary/InhomAndStochLibrary.hoc") }
{ load_file("InhomAndStochLibrary/InhomAndStochApplicator.hoc") }

{ load_file("Widgets/Inhomogeneity/DistFuncHelpers/PythonUtils/PythonUtilsForDistFuncs.hoc") }
{ load_file("Widgets/Inhomogeneity/DistFuncHelpers/FileUtilsForDistFuncs.hoc") }
loadIfNotDeclared("DistFuncGroupAHelper", "Widgets/Inhomogeneity/DistFuncHelpers/Exported/DistFuncGroupAHelper.hoc")
loadIfNotDeclared("DistFuncGroupsBDHelper", "Widgets/Inhomogeneity/DistFuncHelpers/Exported/DistFuncGroupsBDHelper.hoc")
loadIfNotDeclared("DistFuncGroupCHelper", "Widgets/Inhomogeneity/DistFuncHelpers/Exported/DistFuncGroupCHelper.hoc")
loadIfNotDeclared("DistFuncGroupsEFHelper", "Widgets/Inhomogeneity/DistFuncHelpers/Exported/DistFuncGroupsEFHelper.hoc")
loadIfNotDeclared("DistFuncGroupGHelper", "Widgets/Inhomogeneity/DistFuncHelpers/Exported/DistFuncGroupGHelper.hoc")
{ load_file("Widgets/Inhomogeneity/InhomEditorSectionUtils.hoc") }
{ load_file("Widgets/Inhomogeneity/InhomEditorSubWidget.hoc") }

{ load_file("Widgets/Stochasticity/StochDistHelpers/PythonUtils/PythonUtilsForStochDists.hoc") }
loadIfNotDeclared("UniformDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/UniformDistHelper.hoc")
loadIfNotDeclared("NormalDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/NormalDistHelper.hoc")
loadIfNotDeclared("LogNormalDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/LogNormalDistHelper.hoc")
loadIfNotDeclared("NegExpDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/NegExpDistHelper.hoc")
loadIfNotDeclared("ErlangDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/ErlangDistHelper.hoc")
loadIfNotDeclared("WeibullDistHelper", "Widgets/Stochasticity/StochDistHelpers/Exported/WeibullDistHelper.hoc")
loadIfNotDeclared("StochFuncGroupAHelper", "Widgets/Stochasticity/StochFuncHelpers/Exported/StochFuncGroupAHelper.hoc")
loadIfNotDeclared("StochFuncGroupGHelper", "Widgets/Stochasticity/StochFuncHelpers/Exported/StochFuncGroupGHelper.hoc")
{ load_file("Widgets/Stochasticity/ColourizationHelper.hoc") }
{ load_file("Widgets/Stochasticity/BoundingHelper.hoc") }
{ load_file("Widgets/Stochasticity/StochEditorSubWidget.hoc") }

{ load_file("Widgets/StochButtonHiderForVarsEditor.hoc") }
{ load_file("Widgets/VarsEditorWidget.hoc") }

{ load_file("Widgets/MechOrSynManagerBaseWidget.hoc") }

{ load_file("ManagersCommonUtils.hoc") }
