
begintemplate InhomAndStochApplicator
    
    public startPlayingVars, stopPlayingVars, onInit, onStep
    
    external smAllSyns
    external inhomAndStochLibrary, seh
    external eachItemInList
    external codeContractViolation
    
    
    iterator eachActiveSpecialVarFromLib() { codeContractViolation() }
    
    func startPlayingVars() { local isAllPlayed, isThisPlayed localobj specVar
        isAllPlayed = 1
        for eachActiveSpecialVarFromLib(specVar) {
            isThisPlayed = specVar.setPlayIfPossible()
            isAllPlayed = isAllPlayed && isThisPlayed
        }
        return !isAllPlayed
    }
    
    proc stopPlayingVars() { localobj specVar
        for eachActiveSpecialVarFromLib(specVar) {
            specVar.stopPlayingVars()
        }
    }
    
    proc onInit() { localobj specVar
        for eachActiveSpecialVarFromLib(specVar) {
            specVar.onInit()
        }
    }
    
    proc onStep() { localobj specVar
        for eachActiveSpecialVarFromLib(specVar) {
            specVar.onStep()
        }
        afterStep()
    }
    
    // All next staff is private
    
    
    iterator eachActiveSpecialVarFromLib() { local specVarIdx localobj activeSpecVars
        activeSpecVars = inhomAndStochLibrary.activeSpecVars
        for specVarIdx = 0, activeSpecVars.count() - 1 {
            $o1 = activeSpecVars.o(specVarIdx)
            iterator_statement
        }
    }
    
    proc afterStep() { localobj nil, syn
        if (seh == nil) {
            return
        }
        if (!seh.isSefwEnabled()) {
            return
        }
        for eachItemInList(syn, smAllSyns) {
            // !! it would be better to set it back to 0 in MOD code rather than here,
            //    but I couldn't figure out what type of block in MOD file should contain the assignment operator to execute it in the right time
            syn.sefwPp.isAnyEventsOnThisIter = 0
        }
    }
    
endtemplate InhomAndStochApplicator


objref inhomAndStochApplicator
inhomAndStochApplicator = new InhomAndStochApplicator()
