/*
Purkinje_spine and spine neck at spinydendrite133.hoc

A hoc file for a cerebellar Purkinje neuron.

Adapted by SHERRY-ANN BROWN in "Virtual NEURON: a Strategy For Merged Biochemical and Electrophysiological Modeling"(Brown et al., 2010)
from original code written by MIYASHO Tsugumichi and MIYAKAWA Hiroyoshi.

This model runs on NEURON (version 3.2.3).

Description of the original version of this model can be found in 
"Low-threshold potassium channels and a low-threshold calcium channel regulate
Ca2+ spike firing in the dendrites of cerebellar Purkinje neurons : a modeling study"(T. Miyasho et al., Brain Res 891, 2001, 106-115)

Morphology of the original cell used for the original model was taken from a paper by D.P.Shelton (Neuroscience 14, 1985, 111-131).

Channel descriptions are taken from a paper by E.De.Shutter and 
J.M.Bower. (J. Neurophysiol., 71, 1994, 375-400)

*/
xopen("$(NEURONHOME)/lib/hoc/noload.hoc")

{load_proc("nrnmainmenu")} 
/*
{
	load_template("Inserter")
	load_template("Electrode")
	load_template("PointProcessManager")
	load_template("PointProcessLocator")
	load_template("ShowMechanism")
}
*/
NumSmoothDendrite=85
NumSpinyDendrite=1002
NumSpineNeck=1
NumSpine=1

create soma, SmoothDendrite[NumSmoothDendrite], SpinyDendrite[NumSpinyDendrite], SpineNeck[NumSpineNeck], Spine[NumSpine]
access soma
    soma connect SmoothDendrite[0](0),1
    soma	      {nseg=1 L=22 diam=22 }
    SmoothDendrite[0] {nseg=1 L=18 diam=4 }
 
    SmoothDendrite[0] connect SmoothDendrite[1](0),1
    SmoothDendrite[1] {nseg=1 L=39 diam=4 }
 
    SmoothDendrite[1] connect SmoothDendrite[2](0),1
    SmoothDendrite[2] {nseg=1 L=12 diam=2 }
 
    SmoothDendrite[2] connect SmoothDendrite[3](0),1
    SmoothDendrite[3] {nseg=1 L=7 diam=2 }
 
    SmoothDendrite[2] connect SmoothDendrite[4](0),1
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
    soma               {cm=0.8    
         insert Leak gl_Leak = 0.00006 el_Leak = -80
	 insert NaF  gnabar_NaF = 10
         insert NaP
         insert CaP2 cai = 4e-5 cao = 2.4 gcabar_CaP2 = 0.0005
         insert CaT cai = 4e-5 cao = 2.4  gcabar_CaT = 0
         insert CaE cai = 4e-5 cao = 2.4  gcabar_CaE = 0
         insert Khh
         insert KM
         insert KA 
         insert KD  gkbar_KD  = 0
         insert Kh   gkbar_Kh = 0.0005
         insert cad taur_cad = 2 cainf_cad = 4e-5
		    kt_cad = 4e-5 kd_cad = 4e-5 
}
    for i=0,84 SmoothDendrite[i]  {cm=0.8  
         insert Leak gl_Leak = 0.00021 el_Leak = -80
         insert CaP2 cai = 4e-5 cao = 2.4 gcabar_CaP2 = 0.004
         insert CaT cai = 4e-5 cao = 2.4  gcabar_CaT = 0.0015
         insert CaE cai = 4e-5 cao = 2.4  gcabar_CaE = 0.008
         insert Khh gkbar_Khh = 0.0006
         insert KM  gkbar_KM  = 0.00001
         insert KA  gkbar_KA  = 0.08
         insert KD  gkbar_KD  = 0.09
         insert KC3 gkbar_KC3  = 0.06
         insert K23
         insert cad taur_cad = 2 cainf_cad = 4e-5
		    kt_cad = 4e-5 kd_cad = 4e-5 
}


/**** Spiny 1 ****/
    SmoothDendrite[53] connect SpinyDendrite[0](0),1
    SpinyDendrite[0] {nseg=1 L=8 diam=1 }
 

/**** Spiny 2 ****/
    SmoothDendrite[54] connect SpinyDendrite[1](0),1
    SpinyDendrite[1] {nseg=1 L=9 diam=2 }
 
    SpinyDendrite[1] connect SpinyDendrite[2](0),1
    SpinyDendrite[2] {nseg=1 L=6 diam=1.4 }
 
    SpinyDendrite[2] connect SpinyDendrite[3](0),1
    SpinyDendrite[3] {nseg=1 L=8 diam=1 }
 
    SpinyDendrite[2] connect SpinyDendrite[4](0),1
    SpinyDendrite[4] {nseg=1 L=10 diam=1 }
 
    SpinyDendrite[1] connect SpinyDendrite[5](0),1
    SpinyDendrite[5] {nseg=1 L=5 diam=1.4 }
 
    SpinyDendrite[5] connect SpinyDendrite[6](0),1
    SpinyDendrite[6] {nseg=1 L=5 diam=1.0 }
 
    SpinyDendrite[5] connect SpinyDendrite[7](0),1
    SpinyDendrite[7] {nseg=1 L=9 diam=1.0 }
 
/**** Spiny 3 ****/
    SmoothDendrite[54] connect SpinyDendrite[8](0),1
    SpinyDendrite[8] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[8] connect SpinyDendrite[9](0),1
    SpinyDendrite[9] {nseg=1 L=9 diam=1.0 }
 
    SpinyDendrite[8] connect SpinyDendrite[10](0),1
    SpinyDendrite[10] {nseg=1 L=5 diam=2.0 }
 
    SpinyDendrite[10] connect SpinyDendrite[11](0),1
    SpinyDendrite[11] {nseg=1 L=10 diam=1.0 }
 
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

/**** Spiny 4 ****/
    SmoothDendrite[56] connect SpinyDendrite[29](0),1
    SpinyDendrite[29] {nseg=1 L=11 diam=2 }
 
    SpinyDendrite[29] connect SpinyDendrite[30](0),1
    SpinyDendrite[30] {nseg=1 L=6 diam=1.4 }
 
    SpinyDendrite[30] connect SpinyDendrite[31](0),1
    SpinyDendrite[31] {nseg=1 L=10 diam=1 }
 
    SpinyDendrite[30] connect SpinyDendrite[32](0),1
    SpinyDendrite[32] {nseg=1 L=10 diam=1 }
 
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

/**** Spiny 5 ****/
    SmoothDendrite[56] connect SpinyDendrite[50](0),1
    SpinyDendrite[50] {nseg=1 L=5 diam=2 }
 
    SpinyDendrite[50] connect SpinyDendrite[51](0),1
    SpinyDendrite[51] {nseg=1 L=17 diam=1 }
 
    SpinyDendrite[50] connect SpinyDendrite[52](0),1
    SpinyDendrite[52] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[52] connect SpinyDendrite[53](0),1
    SpinyDendrite[53] {nseg=1 L=16 diam=1.4 }
 
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

/**** Spiny 6 ****/
    SmoothDendrite[57] connect SpinyDendrite[63](0),1
    SpinyDendrite[63] {nseg=1 L=16 diam=1.4 }
 
    SpinyDendrite[63] connect SpinyDendrite[64](0),1
    SpinyDendrite[64] {nseg=1 L=4 diam=1 }
 
    SpinyDendrite[63] connect SpinyDendrite[65](0),1
    SpinyDendrite[65] {nseg=1 L=18 diam=1 }
 
/**** Spiny 7 ****/
    SmoothDendrite[58] connect SpinyDendrite[66](0),1
    SpinyDendrite[66] {nseg=1 L=10 diam=1.4 }
 
    SpinyDendrite[66] connect SpinyDendrite[67](0),1
    SpinyDendrite[67] {nseg=1 L=6 diam=1 }
 
    SpinyDendrite[66] connect SpinyDendrite[68](0),1
    SpinyDendrite[68] {nseg=1 L=29 diam=1 }
 

/**** Spiny 8 ****/
    SmoothDendrite[70] connect SpinyDendrite[69](0),1
    SpinyDendrite[69] {nseg=1 L=11 diam=1.4 }
 
    SpinyDendrite[69] connect SpinyDendrite[70](0),1
    SpinyDendrite[70] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[69] connect SpinyDendrite[71](0),1
    SpinyDendrite[71] {nseg=1 L=1 diam=1.4 }
 
    SpinyDendrite[71] connect SpinyDendrite[72](0),1
    SpinyDendrite[72] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[71] connect SpinyDendrite[73](0),1
    SpinyDendrite[73] {nseg=1 L=9 diam=1 }
 

/**** Spiny 9 ****/
    SmoothDendrite[71] connect SpinyDendrite[74](0),1
    SpinyDendrite[74] {nseg=1 L=2 diam=2 }
 
    SpinyDendrite[74] connect SpinyDendrite[75](0),1
    SpinyDendrite[75] {nseg=1 L=22 diam=1.4 }
 
    SpinyDendrite[75] connect SpinyDendrite[76](0),1
    SpinyDendrite[76] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[76] connect SpinyDendrite[77](0),1
    SpinyDendrite[77] {nseg=1 L=14 diam=1 }
 
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

/**** Spiny 10 ****/
    SmoothDendrite[71] connect SpinyDendrite[89](0),1
    SpinyDendrite[89] {nseg=1 L=12 diam=2 }
 
    SpinyDendrite[89] connect SpinyDendrite[90](0),1
    SpinyDendrite[90] {nseg=1 L=7 diam=1.4 }
 
    SpinyDendrite[90] connect SpinyDendrite[91](0),1
    SpinyDendrite[91] {nseg=1 L=26 diam=1 }
 
    SpinyDendrite[90] connect SpinyDendrite[92](0),1
    SpinyDendrite[92] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[89] connect SpinyDendrite[93](0),1
    SpinyDendrite[93] {nseg=1 L=6 diam=1.4 }
 
    SpinyDendrite[93] connect SpinyDendrite[94](0),1
    SpinyDendrite[94] {nseg=1 L=14 diam=1 }
 
    SpinyDendrite[93] connect SpinyDendrite[95](0),1
    SpinyDendrite[95] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[95] connect SpinyDendrite[96](0),1
    SpinyDendrite[96] {nseg=1 L=11 diam=1 }
 
    SpinyDendrite[95] connect SpinyDendrite[97](0),1
    SpinyDendrite[97] {nseg=1 L=7 diam=1.4 }
 
    SpinyDendrite[97] connect SpinyDendrite[98](0),1
    SpinyDendrite[98] {nseg=1 L=4 diam=1 }
 
    SpinyDendrite[97] connect SpinyDendrite[99](0),1
    SpinyDendrite[99] {nseg=1 L=7 diam=1 }


/**** Spiny 11 ****/
    SmoothDendrite[72] connect SpinyDendrite[100](0),1
    SpinyDendrite[100] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[100] connect SpinyDendrite[101](0),1
    SpinyDendrite[101] {nseg=1 L=18 diam=1 }
 
    SpinyDendrite[100] connect SpinyDendrite[102](0),1
    SpinyDendrite[102] {nseg=1 L=2 diam=2 }
 
    SpinyDendrite[102] connect SpinyDendrite[103](0),1
    SpinyDendrite[103] {nseg=1 L=16 diam=1 }
 
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

/**** Spiny 12 ****/
    SmoothDendrite[77] connect SpinyDendrite[113](0),1
    SpinyDendrite[113] {nseg=1 L=3 diam=2 }
 
    SpinyDendrite[113] connect SpinyDendrite[114](0),1
    SpinyDendrite[114] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[114] connect SpinyDendrite[115](0),1
    SpinyDendrite[115] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[115] connect SpinyDendrite[116](0),1
    SpinyDendrite[116] {nseg=1 L=3 diam=1.4 }
 
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    SpineNeck {nseg=1 L=0.66 diam=0.2 }

    SpineNeck connect Spine (0),1
    Spine {nseg=1 L=0.57 diam=0.57 }


/**** Spiny 13 ****/
    SmoothDendrite[78] connect SpinyDendrite[134](0),1
    SpinyDendrite[134] {nseg=1 L=5 diam=2 }
 
    SpinyDendrite[134] connect SpinyDendrite[135](0),1
    SpinyDendrite[135] {nseg=1 L=8 diam=1.4 }
 
    SpinyDendrite[135] connect SpinyDendrite[136](0),1
    SpinyDendrite[136] {nseg=1 L=14 diam=1 }
 
    SpinyDendrite[135] connect SpinyDendrite[137](0),1
    SpinyDendrite[137] {nseg=1 L=10 diam=1 }
 
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/**** Spiny 14 ****/
    SmoothDendrite[80] connect SpinyDendrite[149](0),1
    SpinyDendrite[149] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[149] connect SpinyDendrite[150](0),1
    SpinyDendrite[150] {nseg=1 L=8 diam=1.4 }
 
    SpinyDendrite[150] connect SpinyDendrite[151](0),1
    SpinyDendrite[151] {nseg=1 L=18 diam=1 }
 
    SpinyDendrite[150] connect SpinyDendrite[152](0),1
    SpinyDendrite[152] {nseg=1 L=8 diam=1 }
 
    SpinyDendrite[149] connect SpinyDendrite[153](0),1
    SpinyDendrite[153] {nseg=1 L=8 diam=1.4 }
 
    SpinyDendrite[153] connect SpinyDendrite[154](0),1
    SpinyDendrite[154] {nseg=1 L=18 diam=1 }
 
    SpinyDendrite[153] connect SpinyDendrite[155](0),1
    SpinyDendrite[155] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[155] connect SpinyDendrite[156](0),1
    SpinyDendrite[156] {nseg=1 L=9 diam=1}
 
    SpinyDendrite[155] connect SpinyDendrite[157](0),1
    SpinyDendrite[157] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[157] connect SpinyDendrite[158](0),1
    SpinyDendrite[158] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[157] connect SpinyDendrite[159](0),1
    SpinyDendrite[159] {nseg=1 L=24 diam=1 }


/**** Spiny 15 ****/
    SmoothDendrite[80] connect SpinyDendrite[160](0),1
    SpinyDendrite[160] {nseg=1 L=14 diam=2 }
 
    SpinyDendrite[160] connect SpinyDendrite[161](0),1
    SpinyDendrite[161] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[160] connect SpinyDendrite[162](0),1
    SpinyDendrite[162] {nseg=1 L=3 diam=2 }
 
    SpinyDendrite[162] connect SpinyDendrite[163](0),1
    SpinyDendrite[163] {nseg=1 L=13 diam=1 }
 
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

/**** Spiny 16 ****/
    SmoothDendrite[81] connect SpinyDendrite[173](0),1
    SpinyDendrite[173] {nseg=1 L=2 diam=1.4 }
 
    SpinyDendrite[173] connect SpinyDendrite[174](0),1
    SpinyDendrite[174] {nseg=1 L=18 diam=1 }
 
    SpinyDendrite[173] connect SpinyDendrite[175](0),1
    SpinyDendrite[175] {nseg=1 L=6 diam=1 }


/**** Spiny 17 ****/
    SmoothDendrite[84] connect SpinyDendrite[176](0),1
    SpinyDendrite[176] {nseg=1 L=8 diam=2 }
 
    SpinyDendrite[176] connect SpinyDendrite[177](0),1
    SpinyDendrite[177] {nseg=1 L=40 diam=1 }
 
    SpinyDendrite[176] connect SpinyDendrite[178](0),1
    SpinyDendrite[178] {nseg=1 L=9 diam=2 }
 
    SpinyDendrite[178] connect SpinyDendrite[179](0),1
    SpinyDendrite[179] {nseg=1 L=11 diam=1.4 }
 
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

/**** Spiny 18 ****/
    SmoothDendrite[84] connect SpinyDendrite[189](0),1
    SpinyDendrite[189] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[189] connect SpinyDendrite[190](0),1
    SpinyDendrite[190] {nseg=1 L=7 diam=1.4 }
 
    SpinyDendrite[190] connect SpinyDendrite[191](0),1
    SpinyDendrite[191] {nseg=1 L=9 diam=1 }
 
    SpinyDendrite[190] connect SpinyDendrite[192](0),1
    SpinyDendrite[192] {nseg=1 L=14 diam=1 }
 
    SpinyDendrite[189] connect SpinyDendrite[193](0),1
    SpinyDendrite[193] {nseg=1 L=1 diam=1.4 }
 
    SpinyDendrite[193] connect SpinyDendrite[194](0),1
    SpinyDendrite[194] {nseg=1 L=4 diam=1 }
 
    SpinyDendrite[193] connect SpinyDendrite[195](0),1
    SpinyDendrite[195] {nseg=1 L=10 diam=1.4 }

    SpinyDendrite[195] connect SpinyDendrite[196](0),1
    SpinyDendrite[196] {nseg=1 L=6 diam=1 }
 
    SpinyDendrite[195] connect SpinyDendrite[197](0),1
    SpinyDendrite[197] {nseg=1 L=15 diam=1.4 }
 
    SpinyDendrite[197] connect SpinyDendrite[198](0),1
    SpinyDendrite[198] {nseg=1 L=4 diam=1 }
 
    SpinyDendrite[197] connect SpinyDendrite[199](0),1
    SpinyDendrite[199] {nseg=1 L=9 diam=1 }


/**** Spiny 19 ****/
    SmoothDendrite[83] connect SpinyDendrite[200](0),1
    SpinyDendrite[200] {nseg=1 L=19 diam=1.4 }
 
    SpinyDendrite[200] connect SpinyDendrite[201](0),1
    SpinyDendrite[201] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[200] connect SpinyDendrite[202](0),1
    SpinyDendrite[202] {nseg=1 L=11 diam=1 }
 

/**** Spiny 20 ****/
    SmoothDendrite[82] connect SpinyDendrite[203](0),1
    SpinyDendrite[203] {nseg=1 L=1 diam=1.4 }
 
    SpinyDendrite[203] connect SpinyDendrite[204](0),1
    SpinyDendrite[204] {nseg=1 L=12 diam=1 }
 
    SpinyDendrite[203] connect SpinyDendrite[205](0),1
    SpinyDendrite[205] {nseg=1 L=8 diam=1.4 }
 
    SpinyDendrite[205] connect SpinyDendrite[206](0),1
    SpinyDendrite[206] {nseg=1 L=15 diam=1 }
 
    SpinyDendrite[205] connect SpinyDendrite[207](0),1
    SpinyDendrite[207] {nseg=1 L=14 diam=1 }
 

/**** Spiny 21 ****/
    SmoothDendrite[76] connect SpinyDendrite[208](0),1
    SpinyDendrite[208] {nseg=1 L=28 diam=2 }
 
    SpinyDendrite[208] connect SpinyDendrite[209](0),1
    SpinyDendrite[209] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[209] connect SpinyDendrite[210](0),1
    SpinyDendrite[210] {nseg=1 L=8 diam=1 }
 
    SpinyDendrite[209] connect SpinyDendrite[211](0),1
    SpinyDendrite[211] {nseg=1 L=9 diam=1 }
 
    SpinyDendrite[208] connect SpinyDendrite[212](0),1
    SpinyDendrite[212] {nseg=1 L=4 diam=1.4 }
 
    SpinyDendrite[212] connect SpinyDendrite[213](0),1
    SpinyDendrite[213] {nseg=1 L=2 diam=1 }
 
    SpinyDendrite[212] connect SpinyDendrite[214](0),1
    SpinyDendrite[214] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[214] connect SpinyDendrite[215](0),1
    SpinyDendrite[215] {nseg=1 L=3 diam=1}
 
    SpinyDendrite[214] connect SpinyDendrite[216](0),1
    SpinyDendrite[216] {nseg=1 L=6 diam=1}
 

/**** Spiny 22 ****/
    SmoothDendrite[75] connect SpinyDendrite[217](0),1
    SpinyDendrite[217] {nseg=1 L=4 diam=2 }
 
    SpinyDendrite[217] connect SpinyDendrite[218](0),1
    SpinyDendrite[218] {nseg=1 L=6 diam=1.4 }
 
    SpinyDendrite[218] connect SpinyDendrite[219](0),1
    SpinyDendrite[219] {nseg=1 L=13 diam=1.4 }
 
    SpinyDendrite[219] connect SpinyDendrite[220](0),1
    SpinyDendrite[220] {nseg=1 L=4 diam=1.4 }
 
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

/**** Spiny 23 ****/
    SmoothDendrite[75] connect SpinyDendrite[238](0),1
    SpinyDendrite[238] {nseg=1 L=6 diam=2 }
 
    SpinyDendrite[238] connect SpinyDendrite[239](0),1
    SpinyDendrite[239] {nseg=1 L=25 diam=1.4 }
 
    SpinyDendrite[239] connect SpinyDendrite[240](0),1
    SpinyDendrite[240] {nseg=1 L=13 diam=1.4 }
 
    SpinyDendrite[240] connect SpinyDendrite[241](0),1
    SpinyDendrite[241] {nseg=1 L=18 diam=1.4 }
 
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

/**** Spiny 24 ****/
    SmoothDendrite[74] connect SpinyDendrite[265](0),1
    SpinyDendrite[265] {nseg=1 L=8 diam=1.4 }
 
    SpinyDendrite[265] connect SpinyDendrite[266](0),1
    SpinyDendrite[266] {nseg=1 L=6 diam=1 }

    SpinyDendrite[265] connect SpinyDendrite[267](0),1
    SpinyDendrite[267] {nseg=1 L=5 diam=1 }


/**** Spiny 25 ****/
    SmoothDendrite[64] connect SpinyDendrite[268](0),1
    SpinyDendrite[268] {nseg=1 L=14 diam=2 }
 
    SpinyDendrite[268] connect SpinyDendrite[269](0),1
    SpinyDendrite[269] {nseg=1 L=16 diam=1 }

    SpinyDendrite[268] connect SpinyDendrite[270](0),1
    SpinyDendrite[270] {nseg=1 L=12 diam=2 }

    SpinyDendrite[270] connect SpinyDendrite[271](0),1
    SpinyDendrite[271] {nseg=1 L=14 diam=1 }

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

/**** Spiny 26 ****/
    SmoothDendrite[64] connect SpinyDendrite[285](0),1
    SpinyDendrite[285] {nseg=1 L=5 diam=2 }
 
    SpinyDendrite[285] connect SpinyDendrite[286](0),1
    SpinyDendrite[286] {nseg=1 L=22 diam=1 }

    SpinyDendrite[285] connect SpinyDendrite[287](0),1
    SpinyDendrite[287] {nseg=1 L=6 diam=2 }

    SpinyDendrite[287] connect SpinyDendrite[288](0),1
    SpinyDendrite[288] {nseg=1 L=7 diam=1.4 }

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

/**** Spiny 27 ****/
    SmoothDendrite[63] connect SpinyDendrite[298](0),1
    SpinyDendrite[298] {nseg=1 L=12 diam=1 }
 

/**** Spiny 28 ****/
    SmoothDendrite[66] connect SpinyDendrite[299](0),1
    SpinyDendrite[299] {nseg=1 L=32 diam=1.4 }
 
    SpinyDendrite[299] connect SpinyDendrite[300](0),1
    SpinyDendrite[300] {nseg=1 L=10 diam=1 }

    SpinyDendrite[299] connect SpinyDendrite[301](0),1
    SpinyDendrite[301] {nseg=1 L=4 diam=1 }


/**** Spiny 29 ****/
    SmoothDendrite[67] connect SpinyDendrite[302](0),1
    SpinyDendrite[302] {nseg=1 L=14 diam=1.4 }
 
    SpinyDendrite[302] connect SpinyDendrite[303](0),1
    SpinyDendrite[303] {nseg=1 L=12 diam=1 }

    SpinyDendrite[302] connect SpinyDendrite[304](0),1
    SpinyDendrite[304] {nseg=1 L=5 diam=1 }


/**** Spiny 30 ****/
    SmoothDendrite[68] connect SpinyDendrite[305](0),1
    SpinyDendrite[305] {nseg=1 L=6 diam=2 }
 
    SpinyDendrite[305] connect SpinyDendrite[306](0),1
    SpinyDendrite[306] {nseg=1 L=4 diam=1 }

    SpinyDendrite[305] connect SpinyDendrite[307](0),1
    SpinyDendrite[307] {nseg=1 L=12 diam=2 }

    SpinyDendrite[307] connect SpinyDendrite[308](0),1
    SpinyDendrite[308] {nseg=1 L=8 diam=1.4 }

    SpinyDendrite[308] connect SpinyDendrite[309](0),1
    SpinyDendrite[309] {nseg=1 L=3 diam=1 }

    SpinyDendrite[308] connect SpinyDendrite[310](0),1
    SpinyDendrite[310] {nseg=1 L=6 diam=1 }

    SpinyDendrite[309] connect SpinyDendrite[311](0),1
    SpinyDendrite[311] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[311] connect SpinyDendrite[312](0),1
    SpinyDendrite[312] {nseg=1 L=7 diam=1 }

    SpinyDendrite[311] connect SpinyDendrite[313](0),1
    SpinyDendrite[313] {nseg=1 L=9 diam=1 }


/**** Spiny 31 ****/
    SmoothDendrite[68] connect SpinyDendrite[314](0),1
    SpinyDendrite[314] {nseg=1 L=5 diam=2 }
 
    SpinyDendrite[314] connect SpinyDendrite[315](0),1
    SpinyDendrite[315] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[315] connect SpinyDendrite[316](0),1
    SpinyDendrite[316] {nseg=1 L=1 diam=1.4 }

    SpinyDendrite[316] connect SpinyDendrite[317](0),1
    SpinyDendrite[317] {nseg=1 L=14 diam=1 }

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

/**** Spiny 32 ****/
    SmoothDendrite[65] connect SpinyDendrite[327](0),1
    SpinyDendrite[327] {nseg=1 L=2 diam=2 }
 
    SpinyDendrite[327] connect SpinyDendrite[328](0),1
    SpinyDendrite[328] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[328] connect SpinyDendrite[329](0),1
    SpinyDendrite[329] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[329] connect SpinyDendrite[330](0),1
    SpinyDendrite[330] {nseg=1 L=6 diam=1.4 }

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

/**** Spiny 33 ****/
    SmoothDendrite[60] connect SpinyDendrite[350](0),1
    SpinyDendrite[350] {nseg=1 L=3 diam=2 }
 
    SpinyDendrite[350] connect SpinyDendrite[351](0),1
    SpinyDendrite[351] {nseg=1 L=10 diam=1.4 }

    SpinyDendrite[351] connect SpinyDendrite[352](0),1
    SpinyDendrite[352] {nseg=1 L=5 diam=1 }

    SpinyDendrite[351] connect SpinyDendrite[353](0),1
    SpinyDendrite[353] {nseg=1 L=5 diam=1 }

    SpinyDendrite[350] connect SpinyDendrite[354](0),1
    SpinyDendrite[354] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[354] connect SpinyDendrite[355](0),1
    SpinyDendrite[355] {nseg=1 L=13 diam=1 }

    SpinyDendrite[354] connect SpinyDendrite[356](0),1
    SpinyDendrite[356] {nseg=1 L=10 diam=1.4 }

    SpinyDendrite[356] connect SpinyDendrite[357](0),1
    SpinyDendrite[357] {nseg=1 L=7 diam=1 }

    SpinyDendrite[356] connect SpinyDendrite[358](0),1
    SpinyDendrite[358] {nseg=1 L=6 diam=1 }


/**** Spiny 34 ****/
    SmoothDendrite[60] connect SpinyDendrite[359](0),1
    SpinyDendrite[359] {nseg=1 L=5 diam=2 }
 
    SpinyDendrite[359] connect SpinyDendrite[360](0),1
    SpinyDendrite[360] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[360] connect SpinyDendrite[361](0),1
    SpinyDendrite[361] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[361] connect SpinyDendrite[362](0),1
    SpinyDendrite[362] {nseg=1 L=10 diam=1 }

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

/**** Spiny 35 ****/
    SmoothDendrite[27] connect SpinyDendrite[372](0),1
    SpinyDendrite[372] {nseg=1 L=6 diam=1.4 }
 
    SpinyDendrite[372] connect SpinyDendrite[373](0),1
    SpinyDendrite[373] {nseg=1 L=16 diam=1 }

    SpinyDendrite[372] connect SpinyDendrite[374](0),1
    SpinyDendrite[374] {nseg=1 L=1 diam=1 }


/**** Spiny 36 ****/
    SmoothDendrite[29] connect SpinyDendrite[375](0),1
    SpinyDendrite[375] {nseg=1 L=2 diam=2 }
 
    SpinyDendrite[375] connect SpinyDendrite[376](0),1
    SpinyDendrite[376] {nseg=1 L=4 diam=1 }

    SpinyDendrite[375] connect SpinyDendrite[377](0),1
    SpinyDendrite[377] {nseg=1 L=2 diam=2 }

    SpinyDendrite[377] connect SpinyDendrite[378](0),1
    SpinyDendrite[378] {nseg=1 L=6 diam=1 }

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

/**** Spiny 37 ****/
    SmoothDendrite[29] connect SpinyDendrite[390](0),1
    SpinyDendrite[390] {nseg=1 L=8 diam=2 }
 
    SpinyDendrite[390] connect SpinyDendrite[391](0),1
    SpinyDendrite[391] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[391] connect SpinyDendrite[392](0),1
    SpinyDendrite[392] {nseg=1 L=13 diam=1.4 }

    SpinyDendrite[392] connect SpinyDendrite[393](0),1
    SpinyDendrite[393] {nseg=1 L=18 diam=1 }

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

/**** Spiny 38 ****/
    SmoothDendrite[28] connect SpinyDendrite[407](0),1
    SpinyDendrite[407] {nseg=1 L=16 diam=1.4 }
 
    SpinyDendrite[407] connect SpinyDendrite[408](0),1
    SpinyDendrite[408] {nseg=1 L=5 diam=1 }

    SpinyDendrite[407] connect SpinyDendrite[409](0),1
    SpinyDendrite[409] {nseg=1 L=11 diam=1 }


/**** Spiny 39 ****/
    SmoothDendrite[26] connect SpinyDendrite[410](0),1
    SpinyDendrite[410] {nseg=1 L=14 diam=1.4 }
 
    SpinyDendrite[410] connect SpinyDendrite[411](0),1
    SpinyDendrite[411] {nseg=1 L=4 diam=1 }

    SpinyDendrite[410] connect SpinyDendrite[412](0),1
    SpinyDendrite[412] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[412] connect SpinyDendrite[413](0),1
    SpinyDendrite[413] {nseg=1 L=2 diam=1 }

    SpinyDendrite[412] connect SpinyDendrite[414](0),1
    SpinyDendrite[414] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[414] connect SpinyDendrite[415](0),1
    SpinyDendrite[415] {nseg=1 L=8 diam=1 }

    SpinyDendrite[414] connect SpinyDendrite[416](0),1
    SpinyDendrite[416] {nseg=1 L=15 diam=1 }


/**** Spiny 40 ****/
    SmoothDendrite[30] connect SpinyDendrite[417](0),1
    SpinyDendrite[417] {nseg=1 L=6 diam=2 }
 
    SpinyDendrite[417] connect SpinyDendrite[418](0),1
    SpinyDendrite[418] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[418] connect SpinyDendrite[419](0),1
    SpinyDendrite[419] {nseg=1 L=6 diam=1 }

    SpinyDendrite[418] connect SpinyDendrite[420](0),1
    SpinyDendrite[420] {nseg=1 L=5 diam=1 }

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

/**** Spiny 41 ****/
    SmoothDendrite[32] connect SpinyDendrite[430](0),1
    SpinyDendrite[430] {nseg=1 L=1 diam=2 }
 
    SpinyDendrite[430] connect SpinyDendrite[431](0),1
    SpinyDendrite[431] {nseg=1 L=10 diam=1 }

    SpinyDendrite[430] connect SpinyDendrite[432](0),1
    SpinyDendrite[432] {nseg=1 L=1 diam=2 }

    SpinyDendrite[432] connect SpinyDendrite[433](0),1
    SpinyDendrite[433] {nseg=1 L=9 diam=1 }

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

/**** Spiny 42 ****/
    SmoothDendrite[33] connect SpinyDendrite[445](0),1
    SpinyDendrite[445] {nseg=1 L=18 diam=1 }
 

/**** Spiny 43 ****/
    SmoothDendrite[34] connect SpinyDendrite[446](0),1
    SpinyDendrite[446] {nseg=1 L=2 diam=2 }
 
    SpinyDendrite[446] connect SpinyDendrite[447](0),1
    SpinyDendrite[447] {nseg=1 L=17 diam=1 }

    SpinyDendrite[446] connect SpinyDendrite[448](0),1
    SpinyDendrite[448] {nseg=1 L=1 diam=2 }

    SpinyDendrite[448] connect SpinyDendrite[449](0),1
    SpinyDendrite[449] {nseg=1 L=5 diam=1.4 }

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

/**** Spiny 44 ****/
    SmoothDendrite[34] connect SpinyDendrite[463](0),1
    SpinyDendrite[463] {nseg=1 L=5 diam=2 }

    SpinyDendrite[463] connect SpinyDendrite[464](0),1
    SpinyDendrite[464] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[464] connect SpinyDendrite[465](0),1
    SpinyDendrite[465] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[465] connect SpinyDendrite[466](0),1
    SpinyDendrite[466] {nseg=1 L=6 diam=1 }

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

/**** Spiny 45 ****/
    SmoothDendrite[43] connect SpinyDendrite[482](0),1
    SpinyDendrite[482] {nseg=1 L=7 diam=2 }

    SpinyDendrite[482] connect SpinyDendrite[483](0),1
    SpinyDendrite[483] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[483] connect SpinyDendrite[484](0),1
    SpinyDendrite[484] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[484] connect SpinyDendrite[485](0),1
    SpinyDendrite[485] {nseg=1 L=17 diam=1 }

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 

/**** Spiny 46 ****/
    SmoothDendrite[43] connect SpinyDendrite[495](0),1
    SpinyDendrite[495] {nseg=1 L=6 diam=2 }

    SpinyDendrite[495] connect SpinyDendrite[496](0),1
    SpinyDendrite[496] {nseg=1 L=14 diam=1.4 }

    SpinyDendrite[496] connect SpinyDendrite[497](0),1
    SpinyDendrite[497] {nseg=1 L=7 diam=1 }

    SpinyDendrite[496] connect SpinyDendrite[498](0),1
    SpinyDendrite[498] {nseg=1 L=4 diam=1 }

    SpinyDendrite[495] connect SpinyDendrite[499](0),1
    SpinyDendrite[499] {nseg=1 L=19 diam=1.4 }

    SpinyDendrite[499] connect SpinyDendrite[500](0),1
    SpinyDendrite[500] {nseg=1 L=9 diam=1 }

    SpinyDendrite[499] connect SpinyDendrite[501](0),1
    SpinyDendrite[501] {nseg=1 L=6 diam=1 }


/**** Spiny 47 ****/
    SmoothDendrite[42] connect SpinyDendrite[502](0),1
    SpinyDendrite[502] {nseg=1 L=1 diam=2 }

    SpinyDendrite[502] connect SpinyDendrite[503](0),1
    SpinyDendrite[503] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[503] connect SpinyDendrite[504](0),1
    SpinyDendrite[504] {nseg=1 L=30 diam=1 }

    SpinyDendrite[503] connect SpinyDendrite[505](0),1
    SpinyDendrite[505] {nseg=1 L=18 diam=1 }

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 

/**** Spiny 48 ****/
    SmoothDendrite[49] connect SpinyDendrite[515](0),1
    SpinyDendrite[515] {nseg=1 L=10 diam=1.4 }

    SpinyDendrite[515] connect SpinyDendrite[516](0),1
    SpinyDendrite[516] {nseg=1 L=13 diam=1 }

    SpinyDendrite[515] connect SpinyDendrite[517](0),1
    SpinyDendrite[517] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[517] connect SpinyDendrite[518](0),1
    SpinyDendrite[518] {nseg=1 L=7 diam=1 }

    SpinyDendrite[517] connect SpinyDendrite[519](0),1
    SpinyDendrite[519] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[519] connect SpinyDendrite[520](0),1
    SpinyDendrite[520] {nseg=1 L=12 diam=1 }

    SpinyDendrite[519] connect SpinyDendrite[521](0),1
    SpinyDendrite[521] {nseg=1 L=5 diam=1 }


/**** Spiny 49 ****/
    SmoothDendrite[50] connect SpinyDendrite[522](0),1
    SpinyDendrite[522] {nseg=1 L=14 diam=1 }


/**** Spiny 50 ****/
    SmoothDendrite[51] connect SpinyDendrite[523](0),1
    SpinyDendrite[523] {nseg=1 L=5 diam=2 }

    SpinyDendrite[523] connect SpinyDendrite[524](0),1
    SpinyDendrite[524] {nseg=1 L=8 diam=1.4 }

    SpinyDendrite[524] connect SpinyDendrite[525](0),1
    SpinyDendrite[525] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[525] connect SpinyDendrite[526](0),1
    SpinyDendrite[526] {nseg=1 L=22 diam=1 }

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

/**** Spiny 51 ****/
    SmoothDendrite[51] connect SpinyDendrite[546](0),1
    SpinyDendrite[546] {nseg=1 L=7 diam=2 }

    SpinyDendrite[546] connect SpinyDendrite[547](0),1
    SpinyDendrite[547] {nseg=1 L=10 diam=1.4 }

    SpinyDendrite[547] connect SpinyDendrite[548](0),1
    SpinyDendrite[548] {nseg=1 L=8 diam=1 }

    SpinyDendrite[547] connect SpinyDendrite[549](0),1
    SpinyDendrite[549] {nseg=1 L=10 diam=1 }

    SpinyDendrite[546] connect SpinyDendrite[550](0),1
    SpinyDendrite[550] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[550] connect SpinyDendrite[551](0),1
    SpinyDendrite[551] {nseg=1 L=14 diam=1 }

    SpinyDendrite[550] connect SpinyDendrite[552](0),1
    SpinyDendrite[552] {nseg=1 L=9 diam=1.4 }

    SpinyDendrite[552] connect SpinyDendrite[553](0),1
    SpinyDendrite[553] {nseg=1 L=29 diam=1 }

    SpinyDendrite[552] connect SpinyDendrite[554](0),1
    SpinyDendrite[554] {nseg=1 L=30 diam=1 }


/**** Spiny 52 ****/
    SmoothDendrite[48] connect SpinyDendrite[555](0),1
    SpinyDendrite[555] {nseg=1 L=4 diam=2 }

    SpinyDendrite[555] connect SpinyDendrite[556](0),1
    SpinyDendrite[556] {nseg=1 L=20 diam=1.4 }

    SpinyDendrite[556] connect SpinyDendrite[557](0),1
    SpinyDendrite[557] {nseg=1 L=9 diam=1 }

    SpinyDendrite[556] connect SpinyDendrite[558](0),1
    SpinyDendrite[558] {nseg=1 L=12 diam=1 }

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 

/**** Spiny 53 ****/
    SmoothDendrite[47] connect SpinyDendrite[574](0),1
    SpinyDendrite[574] {nseg=1 L=16 diam=1 }


/**** Spiny 54 ****/
    SmoothDendrite[45] connect SpinyDendrite[575](0),1
    SpinyDendrite[575] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[575] connect SpinyDendrite[576](0),1
    SpinyDendrite[576] {nseg=1 L=8 diam=1 }

    SpinyDendrite[575] connect SpinyDendrite[577](0),1
    SpinyDendrite[577] {nseg=1 L=12 diam=1.4 }

    SpinyDendrite[577] connect SpinyDendrite[578](0),1
    SpinyDendrite[578] {nseg=1 L=16 diam=1 }

    SpinyDendrite[577] connect SpinyDendrite[579](0),1
    SpinyDendrite[579] {nseg=1 L=3 diam=1 }


/**** Spiny 55 ****/
    SmoothDendrite[46] connect SpinyDendrite[580](0),1
    SpinyDendrite[580] {nseg=1 L=20 diam=2 }

    SpinyDendrite[580] connect SpinyDendrite[581](0),1
    SpinyDendrite[581] {nseg=1 L=25 diam=1 }

    SpinyDendrite[580] connect SpinyDendrite[582](0),1
    SpinyDendrite[582] {nseg=1 L=4 diam=2 }

    SpinyDendrite[582] connect SpinyDendrite[583](0),1
    SpinyDendrite[583] {nseg=1 L=6 diam=1 }

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

/**** Spiny 56 ****/
    SmoothDendrite[46] connect SpinyDendrite[597](0),1
    SpinyDendrite[597] {nseg=1 L=4 diam=2 }

    SpinyDendrite[597] connect SpinyDendrite[598](0),1
    SpinyDendrite[598] {nseg=1 L=3 diam=1.4 }

    SpinyDendrite[598] connect SpinyDendrite[599](0),1
    SpinyDendrite[599] {nseg=1 L=14 diam=1.4 }

    SpinyDendrite[599] connect SpinyDendrite[600](0),1
    SpinyDendrite[600] {nseg=1 L=10 diam=1.4 }

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

/**** Spiny 57 ****/
    SmoothDendrite[40] connect SpinyDendrite[622](0),1
    SpinyDendrite[622] {nseg=1 L=3 diam=2 }

    SpinyDendrite[622] connect SpinyDendrite[623](0),1
    SpinyDendrite[623] {nseg=1 L=9 diam=1.4 }

    SpinyDendrite[623] connect SpinyDendrite[624](0),1
    SpinyDendrite[624] {nseg=1 L=27 diam=1 }

    SpinyDendrite[623] connect SpinyDendrite[625](0),1
    SpinyDendrite[625] {nseg=1 L=11 diam=1 }

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
 
/**** Spiny 58 ****/
    SmoothDendrite[39] connect SpinyDendrite[639](0),1
    SpinyDendrite[639] {nseg=1 L=4 diam=2 }

    SpinyDendrite[639] connect SpinyDendrite[640](0),1
    SpinyDendrite[640] {nseg=1 L=10 diam=1 }

    SpinyDendrite[639] connect SpinyDendrite[641](0),1
    SpinyDendrite[641] {nseg=1 L=2 diam=2 }

    SpinyDendrite[641] connect SpinyDendrite[642](0),1
    SpinyDendrite[642] {nseg=1 L=9 diam=1 }

    SpinyDendrite[641] connect SpinyDendrite[643](0),1
    SpinyDendrite[643] {nseg=1 L=2 diam=2 }

    SpinyDendrite[643] connect SpinyDendrite[644](0),1
    SpinyDendrite[644] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[644] connect SpinyDendrite[645](0),1
    SpinyDendrite[645] {nseg=1 L=18 diam=1 }

    SpinyDendrite[644] connect SpinyDendrite[646](0),1
    SpinyDendrite[646] {nseg=1 L=9 diam=1 }

    SpinyDendrite[643] connect SpinyDendrite[647](0),1
    SpinyDendrite[647] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[647] connect SpinyDendrite[648](0),1
    SpinyDendrite[648] {nseg=1 L=16 diam=1 }

    SpinyDendrite[647] connect SpinyDendrite[649](0),1
    SpinyDendrite[649] {nseg=1 L=8 diam=1 }


/**** Spiny 59 ****/
    SmoothDendrite[39] connect SpinyDendrite[650](0),1
    SpinyDendrite[650] {nseg=1 L=1 diam=2 }

    SpinyDendrite[650] connect SpinyDendrite[651](0),1
    SpinyDendrite[651] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[651] connect SpinyDendrite[652](0),1
    SpinyDendrite[652] {nseg=1 L=13 diam=1.4 }

    SpinyDendrite[652] connect SpinyDendrite[653](0),1
    SpinyDendrite[653] {nseg=1 L=22 diam=1 }

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 

/**** Spiny 60 ****/
    SmoothDendrite[37] connect SpinyDendrite[665](0),1
    SpinyDendrite[665] {nseg=1 L=24 diam=1 }


/**** Spiny 61 ****/
    SmoothDendrite[36] connect SpinyDendrite[666](0),1
    SpinyDendrite[666] {nseg=1 L=10 diam=2 }

    SpinyDendrite[666] connect SpinyDendrite[667](0),1
    SpinyDendrite[667] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[667] connect SpinyDendrite[668](0),1
    SpinyDendrite[668] {nseg=1 L=19 diam=1 }

    SpinyDendrite[667] connect SpinyDendrite[669](0),1
    SpinyDendrite[669] {nseg=1 L=4 diam=1 }

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 

/**** Spiny 62 ****/
    SmoothDendrite[36] connect SpinyDendrite[679](0),1
    SpinyDendrite[679] {nseg=1 L=4 diam=2 }

    SpinyDendrite[679] connect SpinyDendrite[680](0),1
    SpinyDendrite[680] {nseg=1 L=8 diam=1 }

    SpinyDendrite[679] connect SpinyDendrite[681](0),1
    SpinyDendrite[681] {nseg=1 L=7 diam=2 }

    SpinyDendrite[681] connect SpinyDendrite[682](0),1
    SpinyDendrite[682] {nseg=1 L=6 diam=1.4 }

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

/**** Spiny 63 ****/
    SmoothDendrite[12] connect SpinyDendrite[700](0),1
    SpinyDendrite[700] {nseg=1 L=12 diam=1 }


/**** Spiny 64 ****/
    SmoothDendrite[13] connect SpinyDendrite[701](0),1
    SpinyDendrite[701] {nseg=1 L=6 diam=2 }

    SpinyDendrite[701] connect SpinyDendrite[702](0),1
    SpinyDendrite[702] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[702] connect SpinyDendrite[703](0),1
    SpinyDendrite[703] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[703] connect SpinyDendrite[704](0),1
    SpinyDendrite[704] {nseg=1 L=5 diam=1 }

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

/**** Spiny 65 ****/
    SmoothDendrite[18] connect SpinyDendrite[726](0),1
    SpinyDendrite[726] {nseg=1 L=8 diam=2 }

    SpinyDendrite[726] connect SpinyDendrite[727](0),1
    SpinyDendrite[727] {nseg=1 L=11 diam=1 }

    SpinyDendrite[726] connect SpinyDendrite[728](0),1
    SpinyDendrite[728] {nseg=1 L=2 diam=2 }

    SpinyDendrite[728] connect SpinyDendrite[729](0),1
    SpinyDendrite[729] {nseg=1 L=25 diam=1 }

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

/**** Spiny 66 ****/
    SmoothDendrite[19] connect SpinyDendrite[741](0),1
    SpinyDendrite[741] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[741] connect SpinyDendrite[742](0),1
    SpinyDendrite[742] {nseg=1 L=26 diam=1 }

    SpinyDendrite[741] connect SpinyDendrite[743](0),1
    SpinyDendrite[743] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[743] connect SpinyDendrite[744](0),1
    SpinyDendrite[744] {nseg=1 L=16 diam=1 }

    SpinyDendrite[743] connect SpinyDendrite[745](0),1
    SpinyDendrite[745] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[745] connect SpinyDendrite[746](0),1
    SpinyDendrite[746] {nseg=1 L=22 diam=1 }

    SpinyDendrite[745] connect SpinyDendrite[747](0),1
    SpinyDendrite[747] {nseg=1 L=11 diam=1.4 }

    SpinyDendrite[747] connect SpinyDendrite[748](0),1
    SpinyDendrite[748] {nseg=1 L=18 diam=1 }

    SpinyDendrite[747] connect SpinyDendrite[749](0),1
    SpinyDendrite[749] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[749] connect SpinyDendrite[750](0),1
    SpinyDendrite[750] {nseg=1 L=17 diam=1 }

    SpinyDendrite[749] connect SpinyDendrite[751](0),1
    SpinyDendrite[751] {nseg=1 L=8 diam=1 }


/**** Spiny 67 ****/
    SmoothDendrite[23] connect SpinyDendrite[752](0),1
    SpinyDendrite[752] {nseg=1 L=15 diam=2 }

    SpinyDendrite[752] connect SpinyDendrite[753](0),1
    SpinyDendrite[753] {nseg=1 L=24 diam=1.4 }

    SpinyDendrite[753] connect SpinyDendrite[754](0),1
    SpinyDendrite[754] {nseg=1 L=16 diam=1 }

    SpinyDendrite[753] connect SpinyDendrite[755](0),1
    SpinyDendrite[755] {nseg=1 L=8 diam=1 }

    SpinyDendrite[752] connect SpinyDendrite[756](0),1
    SpinyDendrite[756] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[756] connect SpinyDendrite[757](0),1
    SpinyDendrite[757] {nseg=1 L=12 diam=1 }

    SpinyDendrite[756] connect SpinyDendrite[758](0),1
    SpinyDendrite[758] {nseg=1 L=12 diam=1.4 }

    SpinyDendrite[758] connect SpinyDendrite[759](0),1
    SpinyDendrite[759] {nseg=1 L=4 diam=1 }

    SpinyDendrite[758] connect SpinyDendrite[760](0),1
    SpinyDendrite[760] {nseg=1 L=14 diam=1 }


/**** Spiny 68 ****/
    SmoothDendrite[24] connect SpinyDendrite[761](0),1
    SpinyDendrite[761] {nseg=1 L=8 diam=2 }

    SpinyDendrite[761] connect SpinyDendrite[762](0),1
    SpinyDendrite[762] {nseg=1 L=13 diam=1.4 }

    SpinyDendrite[762] connect SpinyDendrite[763](0),1
    SpinyDendrite[763] {nseg=1 L=12 diam=1.4 }

    SpinyDendrite[763] connect SpinyDendrite[764](0),1
    SpinyDendrite[764] {nseg=1 L=20 diam=1 }

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 

/**** Spiny 69 ****/
    SmoothDendrite[24] connect SpinyDendrite[788](0),1
    SpinyDendrite[788] {nseg=1 L=6 diam=2 }

    SpinyDendrite[788] connect SpinyDendrite[789](0),1
    SpinyDendrite[789] {nseg=1 L=10 diam=1 }

    SpinyDendrite[788] connect SpinyDendrite[790](0),1
    SpinyDendrite[790] {nseg=1 L=16 diam=2 }

    SpinyDendrite[790] connect SpinyDendrite[791](0),1
    SpinyDendrite[791] {nseg=1 L=3 diam=1.4 }

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

/**** Spiny 70 ****/
    SmoothDendrite[22] connect SpinyDendrite[803](0),1
    SpinyDendrite[803] {nseg=1 L=12 diam=1 }


/**** Spiny 71 ****/
    SmoothDendrite[21] connect SpinyDendrite[804](0),1
    SpinyDendrite[804] {nseg=1 L=4 diam=2 }

    SpinyDendrite[804] connect SpinyDendrite[805](0),1
    SpinyDendrite[805] {nseg=1 L=14 diam=1 }

    SpinyDendrite[804] connect SpinyDendrite[806](0),1
    SpinyDendrite[806] {nseg=1 L=11 diam=2 }

    SpinyDendrite[806] connect SpinyDendrite[807](0),1
    SpinyDendrite[807] {nseg=1 L=16 diam=1.4 }

    SpinyDendrite[807] connect SpinyDendrite[808](0),1
    SpinyDendrite[808] {nseg=1 L=9 diam=1 }

    SpinyDendrite[807] connect SpinyDendrite[809](0),1
    SpinyDendrite[809] {nseg=1 L=13 diam=1 }

    SpinyDendrite[806] connect SpinyDendrite[810](0),1
    SpinyDendrite[810] {nseg=1 L=14 diam=1.4 }

    SpinyDendrite[810] connect SpinyDendrite[811](0),1
    SpinyDendrite[811] {nseg=1 L=5 diam=1 }

    SpinyDendrite[810] connect SpinyDendrite[812](0),1
    SpinyDendrite[812] {nseg=1 L=9 diam=1 }


/**** Spiny 72 ****/
    SmoothDendrite[20] connect SpinyDendrite[813](0),1
    SpinyDendrite[813] {nseg=1 L=8 diam=2 }

    SpinyDendrite[813] connect SpinyDendrite[814](0),1
    SpinyDendrite[814] {nseg=1 L=21 diam=1 }

    SpinyDendrite[813] connect SpinyDendrite[815](0),1
    SpinyDendrite[815] {nseg=1 L=4 diam=2 }

    SpinyDendrite[815] connect SpinyDendrite[816](0),1
    SpinyDendrite[816] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[816] connect SpinyDendrite[817](0),1
    SpinyDendrite[817] {nseg=1 L=7 diam=1 }

    SpinyDendrite[816] connect SpinyDendrite[818](0),1
    SpinyDendrite[818] {nseg=1 L=14 diam=1 }

    SpinyDendrite[815] connect SpinyDendrite[819](0),1
    SpinyDendrite[819] {nseg=1 L=11 diam=1.4 }

    SpinyDendrite[819] connect SpinyDendrite[820](0),1
    SpinyDendrite[820] {nseg=1 L=27 diam=1 }

    SpinyDendrite[819] connect SpinyDendrite[821](0),1
    SpinyDendrite[821] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[821] connect SpinyDendrite[822](0),1
    SpinyDendrite[822] {nseg=1 L=10 diam=1 }

    SpinyDendrite[821] connect SpinyDendrite[823](0),1
    SpinyDendrite[823] {nseg=1 L=3 diam=1 }


/**** Spiny 73 ****/
    SmoothDendrite[15] connect SpinyDendrite[824](0),1
    SpinyDendrite[824] {nseg=1 L=20 diam=1 }


/**** Spiny 74 ****/
    SmoothDendrite[17] connect SpinyDendrite[825](0),1
    SpinyDendrite[825] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[825] connect SpinyDendrite[826](0),1
    SpinyDendrite[826] {nseg=1 L=13 diam=1 }

    SpinyDendrite[825] connect SpinyDendrite[827](0),1
    SpinyDendrite[827] {nseg=1 L=17 diam=1 }


/**** Spiny 75 ****/
    SmoothDendrite[16] connect SpinyDendrite[828](0),1
    SpinyDendrite[828] {nseg=1 L= diam=2 }

    SpinyDendrite[828] connect SpinyDendrite[829](0),1
    SpinyDendrite[829] {nseg=1 L= diam=1.4 }

    SpinyDendrite[829] connect SpinyDendrite[830](0),1
    SpinyDendrite[830] {nseg=1 L= diam=1.4 }

    SpinyDendrite[830] connect SpinyDendrite[831](0),1
    SpinyDendrite[831] {nseg=1 L= diam=1 }

    SpinyDendrite[830] connect SpinyDendrite[832](0),1
    SpinyDendrite[832] {nseg=1 L= diam=1 }

    SpinyDendrite[829] connect SpinyDendrite[833](0),1
    SpinyDendrite[833] {nseg=1 L= diam=1 }

    SpinyDendrite[828] connect SpinyDendrite[834](0),1
    SpinyDendrite[834] {nseg=1 L= diam=1.4 }

    SpinyDendrite[834] connect SpinyDendrite[835](0),1
    SpinyDendrite[835] {nseg=1 L= diam=1 }

    SpinyDendrite[834] connect SpinyDendrite[836](0),1
    SpinyDendrite[836] {nseg=1 L= diam=1.4 }

    SpinyDendrite[836] connect SpinyDendrite[837](0),1
    SpinyDendrite[837] {nseg=1 L= diam=1 }

    SpinyDendrite[836] connect SpinyDendrite[838](0),1
    SpinyDendrite[838] {nseg=1 L= diam=1.4 }

    SpinyDendrite[838] connect SpinyDendrite[839](0),1
    SpinyDendrite[839] {nseg=1 L= diam=1 }

    SpinyDendrite[838] connect SpinyDendrite[840](0),1
    SpinyDendrite[840] {nseg=1 L= diam=1 }


 /**** Spiny 76 ****/
    SmoothDendrite[16] connect SpinyDendrite[841](0),1
    SpinyDendrite[841] {nseg=1 L=6 diam=2 }

    SpinyDendrite[841] connect SpinyDendrite[842](0),1
    SpinyDendrite[842] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[842] connect SpinyDendrite[843](0),1
    SpinyDendrite[843] {nseg=1 L=5 diam=1 }

    SpinyDendrite[842] connect SpinyDendrite[844](0),1
    SpinyDendrite[844] {nseg=1 L=4 diam=1 }

    SpinyDendrite[841] connect SpinyDendrite[845](0),1
    SpinyDendrite[845] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[845] connect SpinyDendrite[846](0),1
    SpinyDendrite[846] {nseg=1 L=22 diam=1 }

    SpinyDendrite[845] connect SpinyDendrite[847](0),1
    SpinyDendrite[847] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[847] connect SpinyDendrite[848](0),1
    SpinyDendrite[848] {nseg=1 L=17 diam=1 }

    SpinyDendrite[847] connect SpinyDendrite[849](0),1
    SpinyDendrite[849] {nseg=1 L=5 diam=1 }


/**** Spiny 77 ****/
    SmoothDendrite[11] connect SpinyDendrite[850](0),1
    SpinyDendrite[850] {nseg=1 L=2 diam=2 }

    SpinyDendrite[850] connect SpinyDendrite[851](0),1
    SpinyDendrite[851] {nseg=1 L=16 diam=1.4 }

    SpinyDendrite[851] connect SpinyDendrite[852](0),1
    SpinyDendrite[852] {nseg=1 L=6 diam=1 }

    SpinyDendrite[851] connect SpinyDendrite[853](0),1
    SpinyDendrite[853] {nseg=1 L=14 diam=1 }

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

/**** Spiny 78 ****/
    SmoothDendrite[10] connect SpinyDendrite[865](0),1
    SpinyDendrite[865] {nseg=1 L=10 diam=2 }

    SpinyDendrite[865] connect SpinyDendrite[866](0),1
    SpinyDendrite[866] {nseg=1 L=5 diam=1 }

    SpinyDendrite[865] connect SpinyDendrite[867](0),1
    SpinyDendrite[867] {nseg=1 L=6 diam=2 }

    SpinyDendrite[867] connect SpinyDendrite[868](0),1
    SpinyDendrite[868] {nseg=1 L=5 diam=1.4 }

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

/**** Spiny 79 ****/
    SmoothDendrite[10] connect SpinyDendrite[880](0),1
    SpinyDendrite[880] {nseg=1 L=10 diam=2 }

    SpinyDendrite[880] connect SpinyDendrite[881](0),1
    SpinyDendrite[881] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[881] connect SpinyDendrite[882](0),1
    SpinyDendrite[882] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[882] connect SpinyDendrite[883](0),1
    SpinyDendrite[883] {nseg=1 L=3 diam=1 }

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

/**** Spiny 80 ****/
    SmoothDendrite[8] connect SpinyDendrite[893](0),1
    SpinyDendrite[893] {nseg=1 L=7 diam=2 }

    SpinyDendrite[893] connect SpinyDendrite[894](0),1
    SpinyDendrite[894] {nseg=1 L=7 diam=1.4 }

    SpinyDendrite[894] connect SpinyDendrite[895](0),1
    SpinyDendrite[895] {nseg=1 L=13 diam=1 }

    SpinyDendrite[894] connect SpinyDendrite[896](0),1
    SpinyDendrite[896] {nseg=1 L=6 diam=1 }

    SpinyDendrite[893] connect SpinyDendrite[897](0),1
    SpinyDendrite[897] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[897] connect SpinyDendrite[898](0),1
    SpinyDendrite[898] {nseg=1 L=12 diam=1 }

    SpinyDendrite[897] connect SpinyDendrite[899](0),1
    SpinyDendrite[899] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[899] connect SpinyDendrite[900](0),1
    SpinyDendrite[900] {nseg=1 L=12 diam=1 }

    SpinyDendrite[899] connect SpinyDendrite[901](0),1
    SpinyDendrite[901] {nseg=1 L=10 diam=1 }


/**** Spiny 81 ****/
    SmoothDendrite[8] connect SpinyDendrite[902](0),1
    SpinyDendrite[902] {nseg=1 L=4 diam=2 }

    SpinyDendrite[902] connect SpinyDendrite[903](0),1
    SpinyDendrite[903] {nseg=1 L=2 diam=1.4 }

    SpinyDendrite[903] connect SpinyDendrite[904](0),1
    SpinyDendrite[904] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[904] connect SpinyDendrite[905](0),1
    SpinyDendrite[905] {nseg=1 L=2 diam=1.4 }

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

/**** Spiny 82 ****/
    SmoothDendrite[4] connect SpinyDendrite[923](0),1
    SpinyDendrite[923] {nseg=1 L=28 diam=1.4 }

    SpinyDendrite[923] connect SpinyDendrite[924](0),1
    SpinyDendrite[924] {nseg=1 L=18 diam=1 }

    SpinyDendrite[923] connect SpinyDendrite[925](0),1
    SpinyDendrite[925] {nseg=1 L=12 diam=1.4 }

    SpinyDendrite[925] connect SpinyDendrite[926](0),1
    SpinyDendrite[926] {nseg=1 L=10 diam=1 }

    SpinyDendrite[925] connect SpinyDendrite[927](0),1
    SpinyDendrite[927] {nseg=1 L=4 diam=1.4 }

    SpinyDendrite[927] connect SpinyDendrite[928](0),1
    SpinyDendrite[928] {nseg=1 L=5 diam=1 }

    SpinyDendrite[927] connect SpinyDendrite[929](0),1
    SpinyDendrite[929] {nseg=1 L=13 diam=1.4 }

    SpinyDendrite[929] connect SpinyDendrite[930](0),1
    SpinyDendrite[930] {nseg=1 L=4 diam=1 }

    SpinyDendrite[929] connect SpinyDendrite[931](0),1
    SpinyDendrite[931] {nseg=1 L=4 diam=1 }


/**** Spiny 83 ****/
    SmoothDendrite[5] connect SpinyDendrite[932](0),1
    SpinyDendrite[932] {nseg=1 L=5 diam=2 }

    SpinyDendrite[932] connect SpinyDendrite[933](0),1
    SpinyDendrite[933] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[933] connect SpinyDendrite[934](0),1
    SpinyDendrite[934] {nseg=1 L=10 diam=1 }

    SpinyDendrite[933] connect SpinyDendrite[935](0),1
    SpinyDendrite[935] {nseg=1 L=5 diam=1 }

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

/**** Spiny 84 ****/
    SmoothDendrite[5] connect SpinyDendrite[947](0),1
    SpinyDendrite[947] {nseg=1 L=8 diam=2 }

    SpinyDendrite[947] connect SpinyDendrite[948](0),1
    SpinyDendrite[948] {nseg=1 L=13 diam=1.4 }

    SpinyDendrite[948] connect SpinyDendrite[949](0),1
    SpinyDendrite[949] {nseg=1 L=5 diam=1 }

    SpinyDendrite[948] connect SpinyDendrite[950](0),1
    SpinyDendrite[950] {nseg=1 L=4 diam=1 }

    SpinyDendrite[947] connect SpinyDendrite[951](0),1
    SpinyDendrite[951] {nseg=1 L=5 diam=1.4 }

    SpinyDendrite[951] connect SpinyDendrite[952](0),1
    SpinyDendrite[952] {nseg=1 L=8 diam=1 }

    SpinyDendrite[951] connect SpinyDendrite[953](0),1
    SpinyDendrite[953] {nseg=1 L=11 diam=1 }


/**** Spiny 85 ****/
    SmoothDendrite[3] connect SpinyDendrite[954](0),1
    SpinyDendrite[954] {nseg=1 L=2 diam=2 }

    SpinyDendrite[954] connect SpinyDendrite[955](0),1
    SpinyDendrite[955] {nseg=1 L=16 diam=1 }

    SpinyDendrite[954] connect SpinyDendrite[956](0),1
    SpinyDendrite[956] {nseg=1 L=2 diam=2 }

    SpinyDendrite[956] connect SpinyDendrite[957](0),1
    SpinyDendrite[957] {nseg=1 L=10 diam=1.4 }

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

/**** Spiny 86 ****/
    SmoothDendrite[3] connect SpinyDendrite[979](0),1
    SpinyDendrite[979] {nseg=1 L=4 diam=2 }

    SpinyDendrite[979] connect SpinyDendrite[980](0),1
    SpinyDendrite[980] {nseg=1 L=6 diam=1.4 }

    SpinyDendrite[980] connect SpinyDendrite[981](0),1
    SpinyDendrite[981] {nseg=1 L=6 diam=1 }

    SpinyDendrite[980] connect SpinyDendrite[982](0),1
    SpinyDendrite[982] {nseg=1 L=2 diam=1 }

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

    for i=0,1001 SpinyDendrite[i]   {cm=1.5
         insert Leak gl_Leak = 0.00021 el_Leak = -80
         insert CaP2 cai = 4e-5 cao = 2.4 gcabar_CaP2 = 0.004
         insert CaT cai = 4e-5 cao = 2.4  gcabar_CaT = 0.0015
         insert CaE cai = 4e-5 cao = 2.4  gcabar_CaE = 0.008
         insert Khh gkbar_Khh = 0.0006
         insert KM  gkbar_KM  = 0.00001
         insert KA  gkbar_KA  = 0.08
         insert KD  gkbar_KD  = 0.09
         insert KC3 gkbar_KC3  = 0.06
         insert K23
         insert cad taur_cad = 2 cainf_cad = 4e-5
		    kt_cad = 4e-5 kd_cad = 4e-5 
}
    Spine {cm=0.8
         insert Leak gl_Leak = 0.00021 el_Leak = -80
         insert CaP2 cai = 4e-5 cao = 2.4 gcabar_CaP2 = 0.004
         insert CaT cai = 4e-5 cao = 2.4  gcabar_CaT = 0.0015
         insert CaE cai = 4e-5 cao = 2.4  gcabar_CaE = 0.008
         insert Khh gkbar_Khh = 0.0006
         insert KM  gkbar_KM  = 0.00001
         insert KA  gkbar_KA  = 0.08
         insert KD  gkbar_KD  = 0.09
         insert KC3 gkbar_KC3  = 0.06
         insert K23
         insert cad taur_cad = 2 cainf_cad = 4e-5
		    kt_cad = 4e-5 kd_cad = 4e-5 
}

global_ra = 250
set_ra()
celsius = 37
  


nrnmainmenu()		/* shows the main panel window on the screen */

