
isAstrocyteOrNeuron = -1
{ load_file("../Code/InterModular/AllInterModularUtils.hoc") }

// Load some test cell
{ load_file("../Nanogeometry/cellmorphology+nano.hoc") }
isBaseOrNanoStart = 0

objref stochTestPlotShape
stochTestPlotShape = new PlotShape()
{ stochTestPlotShape.exec_menu("Shape Plot") }
{ fast_flush_list.append(stochTestPlotShape) }

tstop = 15

// Watch some var just to test stochasticity applied with AltRunControlWidget
objref stochTestGraph
stochTestGraph = new Graph()
// !! "Graph.addvar" doesn't work for NetCon vars, e.g. "smAllSyns.o(123).netCon.weight" (no idea why);
//    to watch a NetCon var, have to select it manually (click in the corner of the Graph, then "Plot what?")
{ stochTestGraph.addvar("smAllSyns.o(123).trgPp.tau2") }
{ stochTestGraph.size(0, tstop, 0, 30) }
{ graphList[0].append(stochTestGraph) }

{ load_file("../Code/Managers/CommonLoads.hoc") }
{ load_file("../Code/Managers/SynManager/SynManager.hoc") }

// !!! makeSureSynCompsCreatedOrImportedThenShowSynManagerBaseWidget()
createSynCompsAndShowSynManagerBaseWidget()

{ chdir("..") }     // Without this, getcwd() will return different path compared to the start from "init.hoc"
