
proc sourcePythonCodeForExport() { local status
    strdef pyCommand
    
    pyCommand = "import sys\nimport os\nsys.path.append(os.getcwd() + '\\_Code\\Export\\PythonCode')\nfrom Framework import *\nfrom UtilsCalledFromHoc.GraphUtils import GraphUtils\nfrom UtilsCalledFromHoc.OtherUtils import *"
    
    status = nrnpython(pyCommand)
    if (!status) {
        printPythonErrMsgAndStop("sourcePythonCodeForExport")
    }
}

proc callPythonExportCore() { local status
    strdef outHocFilePathName, pyCommand
    
    outHocFilePathName = $s1
    
    sprint(pyCommand, "exportCore('%s')", outHocFilePathName)
    
    status = nrnpython(pyCommand)
    if (!status) {
        printPythonErrMsgAndStop("callPythonExportCore")
    }
}
