
{ load_file("InterModularErrWarnUtils.hoc") }
{ load_file("PrerequisitesCheck.hoc") }
checkPrerequisites()
{ load_file("InterModularBasicMath.hoc") }
objref soma_ref, axon_ref, endFoot_ref
objref usedNamesForDendrites, nanoBranchesManager, seededDendrites_ref
{ load_file("InterModularPythonUtils.hoc") }
{ load_file("InterModularVectorUtils.hoc") }                    // !! not intermodular yet
{ load_file("InterModularListUtils.hoc") }
{ load_file("InterModularSectionUtils.hoc") }
{ load_file("InterModularMechSettings.hoc") }
{ load_file("InterModularCellTypeUtils.hoc") }
{ load_file("Widgets/MessageWarningHelper.hoc") }
{ load_file("InterModularMechsDllUtils.hoc") }
{ load_file("InterModularStringUtils.hoc") }
objref mmAllComps
iterator findSecArrayOrObjectIterator() { codeContractViolation() }
{ load_file("InterModularUniqueNameUtils.hoc") }
{ load_file("InterModularUniqueListItemUtils.hoc") }
{ load_file("InterModularRNGUtils.hoc") }
objref smAllComps, mmIcrHelper
proc makeSureSynCompsCreatedOrImported() { codeContractViolation() }
{ load_file("InterModularCompUtils.hoc") }
{ load_file("InterModularUnitsUtils.hoc") }
{ load_file("InterModularGraphUtils.hoc") }
{ load_file("InterModularWidgetUtils.hoc") }
{ load_file("InterModularOtherUtils.hoc") }
objref mmcoWidget
{ load_file("../MainUI/PluginsForCompSelectionWidget.hoc") }
{ load_file("Widgets/FileBrowserHelper.hoc") }
{ load_file("Widgets/CompSubsetWidget.hoc") }                   // !! not intermodular yet
{ load_file("Widgets/GlobalsEditorWidget.hoc") }
objref smAllSyns, mainUiLocker
