
_numSpeciesInEcdMod = -1

begintemplate MechSettings

    public onDllLoad, isHideStochButton, getAllSpcCatNames, getNumSpeciesInJSON, getUserFriendlyIonNameOrEmpty, getExpIonNameAndDiffIter, getUnrecActIonNameIter, isIon
    public unrecSpcCatName, ionSuffix
    
    external pyObj
    external _numSpeciesInEcdMod
    external findItemInListByString, stringEndsWith, printPythonErrMsgAndStop, printMsgAndRaiseError
    external eachItemInList
    
    strdef unrecSpcCatName, ionSuffix
    
    objref actIonNames
    
    
    proc init() { local status
        strdef pyCommand
        
        pyCommand = "import sys\nimport os\nsys.path.append(os.getcwd() + '\\PythonCode')\nfrom MechSettings import *"
        
        status = nrnpython(pyCommand)
        if (!status) {
            printPythonErrMsgAndStop("MechSettings ctor")
        }
        
        // !!! need to check that JSON file doesn't contain such a category
        unrecSpcCatName = "Unrecognized"
        
        // !!! maybe need to check that JSON file doesn't contain the same ion in 2+ categories
        
        ionSuffix = "_ion"  // !!! find a better template for this string
    }
    
    proc onDllLoad() { local mechIdx localobj mechType, expIonNames, expIonNameStrObj
        strdef mechName, msg
        
        // Only "Na+" and "K+" are standard to NEURON: they are available even without any custom MOD files.
        // All other ions depend on user's MOD files (unless defined as HOC-based mechanisms).
        actIonNames = new List()
        mechType = new MechanismType(0)     // 0: "Distributed Membrane Mechanisms"
        for mechIdx = 0, mechType.count - 1 {
            mechType.select(mechIdx)
            mechType.selected(mechName)
            if (isIon(mechName)) {
                actIonNames.append(new String(mechName))
            }
        }
        
        msg = "JSON file \"diffusible_species.json\" and MOD file \"_ECDCalcAndConsHelper.mod\" are out of sync.\n    The lists of species in these files must be identical (the total number of species, their order and \"ionMechName\")."
        
        execute("_numSpeciesInEcdMod = getNumSpeciesInMOD_ECDCalcAndConsHelper()")
        if (getNumSpeciesInJSON() != _numSpeciesInEcdMod) {
            printMsgAndRaiseError(msg)
        }
        
        expIonNames = getAllExpIonNames()
        for eachItemInList(expIonNameStrObj, expIonNames) {
            if (findItemInListByString(actIonNames, expIonNameStrObj.s) == -1) {
                printMsgAndRaiseError(msg)
            }
        }
        
        // !!!! do we need this in "start with nano" mode?
        // !!!! make sure we don't rewrite any GLOBAL-s later (in the legacy code)
        pyObj.ms_setIonGlobalVars()
    }
    
    func isHideStochButton() {
        strdef mechName, varNameWithIndex
        mechName = $s1
        varNameWithIndex = $s2
        return pyObj.ms_isHideStochButton(mechName, varNameWithIndex)
    }
    
    obfunc getAllSpcCatNames() {
        return convertPyListOfStrsToHocListOfStrObjs(pyObj.ms_getAllSpcCatNames())
    }
    
    func getNumSpeciesInJSON() {
        return pyObj.ms_getTotalNumExpIons()
    }
    
    proc getUserFriendlyIonNameOrEmpty() {
        strdef ionMechName
        ionMechName = $s1
        $s2 = pyObj.ms_getUserFriendlyIonNameOrEmpty(ionMechName)
    }
    
    iterator getExpIonNameAndDiffIter() { local expIonIdx localobj expIonNamesInThisCat
        strdef spcCatName, expIonName
        
        spcCatName = $s1
        
        expIonNamesInThisCat = convertPyListOfStrsToHocListOfStrObjs(pyObj.ms_getAllExpIonNamesInThisCat(spcCatName))
        
        for expIonIdx = 0, expIonNamesInThisCat.count() - 1 {
            expIonName = expIonNamesInThisCat.o(expIonIdx).s
            $s2 = expIonName
            $&3 = pyObj.ms_getDiff(spcCatName, expIonName)
            iterator_statement
        }
    }
    
    iterator getUnrecActIonNameIter() { local actIonIdx localobj expIonNames
        strdef actIonName
        
        expIonNames = getAllExpIonNames()
        
        for actIonIdx = 0, actIonNames.count() - 1 {
            actIonName = actIonNames.o(actIonIdx).s
            if (findItemInListByString(expIonNames, actIonName) == -1) {
                $s1 = actIonName
                iterator_statement
            }
        }
    }
    
    func isIon() {
        strdef mechName
        mechName = $s1
        // !! it looks like checking for "_ion" suffix is not what NEURON does internally
        return stringEndsWith(mechName, ionSuffix)
    }
    
    // All next staff is private
    
    
    obfunc getAllExpIonNames() {
        return convertPyListOfStrsToHocListOfStrObjs(pyObj.ms_getAllExpIonNames())
    }
    
    // !!! maybe move to some higher-level intermodular utils (Python/List/String)
    obfunc convertPyListOfStrsToHocListOfStrObjs() { local strIdx localobj pyList, hocList
        pyList = $o1
        hocList = new List()
        for strIdx = 0, pyObj.len(pyList) - 1 {
            // hocList.append(new String(pyList.__getitem__(strIdx)))   // TypeError: list indices must be integers or slices, not float
            hocList.append(new String(pyObj.ms_getPyListItem(pyList, strIdx)))
        }
        return hocList
    }
    
endtemplate MechSettings

objref mechSettings
mechSettings = new MechSettings()   // !!!! make sure it's imported when we start with nano UPD: maybe no need to import this
