
{ load_file("InhomModels/DistFuncHelpers/DistFuncsCatalogue.hoc") }
{ load_file("StochModels/StochFuncHelpers/StochFuncsCatalogue.hoc") }

{ load_file("DistMechVerbatimInhomTargetProto.hoc") }
{ load_file("InhomAndStochTarget.hoc") }
{ load_file("InhomAndStochLibrary.hoc") }
loadIfNotDeclared("InhomAndStochApplicator", "Exported/InhomAndStochApplicator.hoc")

{ load_file("InhomModels/DistFuncHelpers/PythonUtils/PythonUtilsForDistFuncs.hoc") }
{ load_file("InhomModels/DistFuncHelpers/FileUtilsForDistFuncs.hoc") }
loadIfNotDeclared("SimpleModelDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/SimpleModelDistFuncHelper.hoc")
loadIfNotDeclared("CustomCodeDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/CustomCodeDistFuncHelper.hoc", 1)
loadIfNotDeclared("CodeFromFileDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/CodeFromFileDistFuncHelper.hoc")
loadIfNotDeclared("TablePlusLinInterpDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/TablePlusLinInterpDistFuncHelper.hoc")
loadIfNotDeclared("ZebraDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/ZebraDistFuncHelper.hoc")
loadIfNotDeclared("VerbatimDistFuncHelper", "InhomModels/DistFuncHelpers/Exported/VerbatimDistFuncHelper.hoc")

{ load_file("StochModels/StochDistHelpers/PythonUtils/PythonUtilsForStochDists.hoc") }
loadIfNotDeclared("UniformDistHelper", "StochModels/StochDistHelpers/Exported/UniformDistHelper.hoc")
loadIfNotDeclared("NormalDistHelper", "StochModels/StochDistHelpers/Exported/NormalDistHelper.hoc")
loadIfNotDeclared("LogNormalDistHelper", "StochModels/StochDistHelpers/Exported/LogNormalDistHelper.hoc")
loadIfNotDeclared("NegExpDistHelper", "StochModels/StochDistHelpers/Exported/NegExpDistHelper.hoc")
loadIfNotDeclared("ErlangDistHelper", "StochModels/StochDistHelpers/Exported/ErlangDistHelper.hoc")
loadIfNotDeclared("WeibullDistHelper", "StochModels/StochDistHelpers/Exported/WeibullDistHelper.hoc")
loadIfNotDeclared("SimpleModelStochFuncHelper", "StochModels/StochFuncHelpers/Exported/SimpleModelStochFuncHelper.hoc")
loadIfNotDeclared("SpecialStochFuncHelper", "StochModels/StochFuncHelpers/Exported/SpecialStochFuncHelper.hoc")
